<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:CreateSerialPort">
          <io:Name>myArduino</io:Name>
          <io:PortName>COM12</io:PortName>
          <io:BaudRate>250000</io:BaudRate>
          <io:Parity>None</io:Parity>
          <io:ParityReplace>63</io:ParityReplace>
          <io:DataBits>8</io:DataBits>
          <io:StopBits>One</io:StopBits>
          <io:Handshake>None</io:Handshake>
          <io:DiscardNull>false</io:DiscardNull>
          <io:DtrEnable>true</io:DtrEnable>
          <io:RtsEnable>false</io:RtsEnable>
          <io:ReadBufferSize>4096</io:ReadBufferSize>
          <io:WriteBufferSize>2048</io:WriteBufferSize>
          <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringRead">
          <io:PortName>myArduino</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>OpenValve</Name>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>MakeString</ipy:Name>
        <ipy:Script>@returns(str)
def process(value):
  return str.format("{0}", value)</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>myArduino</io:PortName>
          <io:NewLine>\r</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>5</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>RewardAmount</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RewardAmount</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Calibration_val" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>100</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Multiply" />
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>500</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>OpenValve</Name>
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>C:\Water_calibration\calibration.csv</io:FileName>
        <io:SkipRows>0</io:SkipRows>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="10" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>